PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = mouseWheel
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Routines
  Routine Book_Status
    MouseComponent mouse_3
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Each Frame:
        newY = mouse.getWheelRel()[1] / 40
        img3.pos -= (0, newY)

        Clock_3.setText("%d" % timer.getTime(), log=False)

        if timer.getTime() <= 0:
            trials.finished = True
            continueRoutine = False
    ImageComponent img3
      image = html\resources\CodeScreenShots2\Book_Status_Java.png
      pos = (0, -0.1)
      size = (1.0, 1.07)
      startVal [time (s)] = 0.0
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    ButtonComponent button_1
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, 0)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next
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    ButtonComponent next_phase_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.7, 0.3)
      size = (0.35, 0.1)
      startVal [time (s)] = 0
      text = Next Phase
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      callback:
        trials.finished = True
        continueRoutine = False
    TextComponent Clock_3
      letterHeight = 0.05
      pos = (-0.7, 0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $"%d" % timer.getTime()
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    TextComponent info_3
      letterHeight = 0.05
      pos = (-0.7, 0.4)
      startVal [time (s)] = 0.0
      text = Remaining Time:
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  Routine Library
    MouseComponent mouse_4
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
      Each Frame:
        newY = mouse.getWheelRel()[1] / 40
        img4.pos -= (0, newY)

        Clock_4.setText("%d" % timer.getTime(), log=False)

        if timer.getTime() <= 0:
            trials.finished = True
            continueRoutine = False
    ImageComponent img4
      image = html\resources\CodeScreenShots2\Library_Java.png
      pos = (0, -1.1)
      size = (1, 2.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, 0)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next
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    ButtonComponent next_phase_4
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.7, 0.3)
      size = (0.35, 0.1)
      startVal [time (s)] = 0
      text = Next Phase
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      callback:
        trials.finished = True
        continueRoutine = False
    TextComponent Clock_4
      letterHeight = 0.05
      pos = (-0.7, 0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $"%d" % timer.getTime()
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    TextComponent info_4
      letterHeight = 0.05
      pos = (-0.7, 0.4)
      startVal [time (s)] = 0.0
      text = Remaining Time:
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  Routine Person
    MouseComponent mouse_5
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Py
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      Each Frame:
        newY = mouse.getWheelRel()[1] / 40
        img5.pos -= (0, newY)

        Clock_5.setText("%d" % timer.getTime(), log=False)

        if timer.getTime() <= 0:
            trials.finished = True
            continueRoutine = False
    ImageComponent img5
      image = html\resources\CodeScreenShots2\Person_Java.png
      pos = (0, -0.15)
      size = (1, 1.18)
      startVal [time (s)] = 0.0
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    ButtonComponent button_4
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.7, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Back to Beginning
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    ButtonComponent next_phase_5
      bold = True
      callback = trials.finished = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.7, 0.3)
      size = (0.35, 0.1)
      startVal [time (s)] = 0
      text = Next Phase
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    TextComponent Clock_5
      letterHeight = 0.05
      pos = (-0.7, 0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $"%d" % timer.getTime()
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    TextComponent info_5
      letterHeight = 0.05
      pos = (-0.7, 0.4)
      startVal [time (s)] = 0.0
      text = Remaining Time:
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  Routine Questionnaire_phase_introduction
    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this section, you will be asked to answer some Yes/No questions
        concerning the code you read just now by pressing "Y" and "N"
        keys on the keyboard. The questions will not forward until the keys
        are pressed.

        Press Spacebar to Continue.
    KeyboardComponent key_resp_49
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Q1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does the program define the “Account” class?

        (Y/N)
    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Q2
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does the program define the “Money” class?

        (Y/N)
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Q3
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does the program define the “Employer” class?

        (Y/N)
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Q4
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does the program define the “Employee” class?

        (Y/N)
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Q5
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Is the field “amount” represented by a floating point number?

        (Y/N)
    KeyboardComponent key_resp_5
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Q6
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does Account::takeMoney() check if the field “amount” is below 0?

        (Y/N)
    KeyboardComponent key_resp_6
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Thanks
    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Thank you for your participation!
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    ButtonComponent Exit_button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
      text = The End
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  Routine Q7
    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Will Account::addMoney() notify someone if it has successfully
        received the amount?

        (Y/N)
    KeyboardComponent key_resp_7
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Q8
    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Is the method “takeMoney()” part of the “Employee” class?

        (Y/N)
    KeyboardComponent key_resp_8
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Q9
    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Is the field “amount” shared to either “Employer” or “Employee”?

        (Y/N)
    KeyboardComponent key_resp_9
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Q10
    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Will the field “amount” always stay above 0?

        (Y/N)
    KeyboardComponent key_resp_10
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Q11
    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does the Employee add his/her money taken from the Employer’s
        account into another account not accessible to the Employer?

        (Y/N)
    KeyboardComponent key_resp_11
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Q12
    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Are both methods of the “Account” class thread safe?

        (Y/N)
    KeyboardComponent key_resp_12
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Q13
    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        When two threads launched with the “Employee” taking away the
        money at the same time, will both of the actions be registered,
        resulting a total withdraw value of 20?

        (Y/N)
    KeyboardComponent key_resp_13
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Q14
    TextComponent text_17
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does the Employee have to wait for the Employer to add money at any moment?

        (Y/N)
    KeyboardComponent key_resp_14
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Q15
    TextComponent text_18
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Can the Employer add money into the account if the Employee has
        not finished taking away money?

        (Y/N)
    KeyboardComponent key_resp_15
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Q16
    TextComponent text_19
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Is “80” the amount remaining after all the threads have finished
        their tasks?

        (Y/N)
    KeyboardComponent key_resp_16
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Q17
    TextComponent text_20
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does the method "Map::remove()" used in this program return the previous value associated with the given key?

        (Y/N)
    KeyboardComponent key_resp_17
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q18
    TextComponent text_21
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does the method "Map::replace()" used in this program return the current value associated with the given key?

        (Y/N)
    KeyboardComponent key_resp_18
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q19
    TextComponent text_22
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does the method "Map::get()" used in this program use an overridden ".equals()" method to find books in the libraries as keys?

        (Y/N)
    KeyboardComponent key_resp_19
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q20
    TextComponent text_23
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does the method "Library::addBook()" set a default date (1970/1/1) when a new book is added to the library?

        (Y/N)
    KeyboardComponent key_resp_20
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q21
    TextComponent text_24
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does the method "Library::borrowBook()" allow a book to be lent to other people if someone returns this book late and needs to pay a fine?

        (Y/N)
    KeyboardComponent key_resp_21
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q22
    TextComponent text_25
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does the method "Library::returnBook()" reset the date to the default date (1970/1/1) when a person returns a book?

        (Y/N)
    KeyboardComponent key_resp_22
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q23
    TextComponent text_26
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Is the "Person::payFine()" method associated with any book instance?

        (Y/N)
    KeyboardComponent key_resp_23
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q24
    TextComponent text_27
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does the program iterate through all the books in the library when someone tries to borrow a book?

        (Y/N)
    KeyboardComponent key_resp_24
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q25
    TextComponent text_28
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does the program modify "BookStatus::due" when the execution of "Library::borrowBook()" returns true?

        (Y/N)
    KeyboardComponent key_resp_25
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q26
    TextComponent text_29
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does the program modify the "Calendar" value of a "BookStatus" when someone successfully returns the book?

        (Y/N)
    KeyboardComponent key_resp_26
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q27
    TextComponent text_30
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Will the reference of "Person::id" gets changed in the "ConcurrentHashMap" when someone successfully borrows a book?

        (Y/N)
    KeyboardComponent key_resp_27
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q28
    TextComponent text_31
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Will the "Person::id" of a person gets changed into the "ConcurrentHashMap" when someone successfully returns a book?

        (Y/N)
    KeyboardComponent key_resp_28
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q29
    TextComponent text_32
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does the "addBook" method return "true" on all the threads if two or more threads attempt to add the same book?

        (Y/N)
    KeyboardComponent key_resp_29
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q30
    TextComponent text_33
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does the "removeBook" method return "true" on all the threads if two or more threads tries to remove the same book concurrently?

        (Y/N)
    KeyboardComponent key_resp_30
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q32
    TextComponent text_35
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If two threads concurrently execute the "Library::returnBook()" method, is it possible that one thread returns "true" and the other thread returns "false"?

        (Y/N)
    KeyboardComponent key_resp_32
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q33
    TextComponent text_36
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Does the "Library::findBook()" method return true on all the threads if two or more threads tries to search for the same book , if and only if the book is in the library?

        (Y/N)
    KeyboardComponent key_resp_33
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q34
    TextComponent text_37
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If two threads borrow the same book simultaneously, will one thread modify the book status already modified by another thread?

        (Y/N)
    KeyboardComponent key_resp_34
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q35
    TextComponent text_38
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If two threads return the same book simultaneously,  will one thread modify the book status already modified by another thread?

        (Y/N)
    KeyboardComponent key_resp_35
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q36
    TextComponent text_39
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Is the program able to identify if another thread has already added a book when the current thread tries to add the same book , assuming both threads calling method "Library::addBook()" and the book is not in the library before the method has been called?

        (Y/N)
    KeyboardComponent key_resp_36
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q37
    TextComponent text_40
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Is the program able to identify if another thread has already removed a book when the current thread tries to remove the same book?

        (Y/N)
    KeyboardComponent key_resp_37
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q38
    TextComponent text_41
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Will the "Library::borrowBook()" method throw a "BookNotFoundException" when it tries to borrow a book while another thread removes the book?

        (Y/N)
    KeyboardComponent key_resp_38
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q39
    TextComponent text_42
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Will the "Library::returnBook()" throw a "BookNotFoundException" when it tries to return a book while another thread tries to find the same book?

        (Y/N)
    KeyboardComponent key_resp_39
      allowedKeys = 'y','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Q40
    TextComponent text_43
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Is the "ConcurrentHashMap" used in the library shared between threads? (Assuming only one instance of the library is created and the program concurrently runs its methods?)

        (Y/N)
    KeyboardComponent key_resp_40
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Welcome
    CodeComponent exp_init
      Code Type = Py
      Begin Experiment:
        RTD = 0
        RTR = 0

        if len(expInfo['participant']) % 2 == 0:
            # read-to-recall
            RTR = 1
        else:
            # read-to-do
            RTD = 1

        API_rep = 1

        comment1 = "Please type here"
        comment2 = "Please type here"
        comment3 = "Please type here"
        comment4 = "Please type here"
        comment5 = "Please type here"
    KeyboardComponent key_resp_31
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent text_50
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        Before the experiment begins, we will inform you what we will
        be doing in this experiment. If you agree and understand our
        purpose, appreciated.

        Please stay in FULL-SCREEN during the full experiment setting.
        (if you are not in full screen, press F11)

        Press Spacebar to Continue.
  Routine Book_Not_Found_Do
    MouseComponent mouse_7
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        comment_box_2.text = comment2
      Each Frame:
        newY = mouse.getWheelRel()[1] / 40
        img7.pos -= (0, newY)

        Clock_1.setText("%d" % timer.getTime(), log=False)

        if timer.getTime() <= 0:
            trials.finished = True
            continueRoutine = False
      End Routine:
        comment2 = comment_box_2.getText()
    ImageComponent img7
      image = html\resources\CodeScreenShots2\Book_Not_Found_Java.png
      size = (1, 0.22)
      startVal [time (s)] = 0.0
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    ButtonComponent next_13
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, 0)
      save = first click
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next
      timeRelativeTo = routine
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    ButtonComponent next_phase_13
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.7, 0.3)
      size = (0.35, 0.1)
      startVal [time (s)] = 0
      text = Next Phase
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      callback:
        trials.finished = True
        continueRoutine = False
    TextComponent Clock_7
      letterHeight = 0.05
      pos = (-0.7, 0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $"%d" % timer.getTime()
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    TextComponent info_7
      letterHeight = 0.05
      pos = (-0.7, 0.4)
      startVal [time (s)] = 0.0
      text = Remaining Time:
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    TextComponent comment_2
      letterHeight = 0.05
      pos = (-0.7, 0.1)
      startVal [time (s)] = 0.0
      text = Comments:
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    TextboxComponent comment_box_2
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.03
      padding = None
      pos = (-0.7, -0.2)
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $comment2
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  Routine Book_Status_Do
    MouseComponent mouse_8
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        comment_box_3.text = comment3
      Each Frame:
        newY = mouse.getWheelRel()[1] / 40
        img8.pos -= (0, newY)

        Clock_1.setText("%d" % timer.getTime(), log=False)

        if timer.getTime() <= 0:
            trials.finished = True
            continueRoutine = False
      End Routine:
        comment3 = comment_box_3.getText()
    ImageComponent img8
      image = html\resources\CodeScreenShots2\Book_Status_Java.png
      pos = (0, -0.1)
      size = (1.0, 1.07)
      startVal [time (s)] = 0.0
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    ButtonComponent next_14
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, 0)
      save = first click
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next
      timeRelativeTo = routine
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    ButtonComponent next_phase_14
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.7, 0.3)
      size = (0.35, 0.1)
      startVal [time (s)] = 0
      text = Next Phase
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      callback:
        trials.finished = True
        continueRoutine = False
    TextComponent Clock_8
      letterHeight = 0.05
      pos = (-0.7, 0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $"%d" % timer.getTime()
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    TextComponent info_8
      letterHeight = 0.05
      pos = (-0.7, 0.4)
      startVal [time (s)] = 0.0
      text = Remaining Time:
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    TextComponent comments_3
      letterHeight = 0.05
      pos = (-0.7, 0.1)
      startVal [time (s)] = 0.0
      text = Comments
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    TextboxComponent comment_box_3
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.03
      padding = None
      pos = (-0.7, -0.2)
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $comment3
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  Routine Library_Do
    MouseComponent mouse_9
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        comment_box_4.text = comment4
      Each Frame:
        newY = mouse.getWheelRel()[1] / 40
        img9.pos -= (0, newY)

        Clock_1.setText("%d" % timer.getTime(), log=False)

        if timer.getTime() <= 0:
            trials.finished = True
            continueRoutine = False
      End Routine:
        comment4 = comment_box_4.getText()
    ImageComponent img9
      pos = (0,-1.1)
      size = (1, 2.5)
      startVal [time (s)] = 0.0
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    ButtonComponent next_15
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, 0)
      save = first click
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next
      timeRelativeTo = routine
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    ButtonComponent next_phase_15
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.7, 0.3)
      size = (0.35, 0.1)
      startVal [time (s)] = 0
      text = Next Phase
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      callback:
        trials.finished = True
        continueRoutine = False
    TextComponent Clock_9
      letterHeight = 0.05
      pos = (-0.7, 0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $"%d" % timer.getTime()
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    TextComponent info_9
      letterHeight = 0.05
      pos = (-0.7, 0.4)
      startVal [time (s)] = 0.0
      text = Remaining Time:
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    TextComponent comments_4
      letterHeight = 0.05
      pos = (-0.7, 0.1)
      startVal [time (s)] = 0.0
      text = Comments:
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    TextboxComponent comment_box_4
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.03
      padding = None
      pos = (-0.7, -0.2)
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $comment4
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  Routine Person_Do
    MouseComponent mouse_10
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        comment_box_5.text = comment5
      Each Frame:
        newY = mouse.getWheelRel()[1] / 40
        img10.pos -= (0, newY)

        Clock_1.setText("%d" % timer.getTime(), log=False)

        if timer.getTime() <= 0:
            trials.finished = True
            continueRoutine = False
      End Routine:
        comment5 = comment_box_5.getText()
    ImageComponent img10
      image = html\resources\CodeScreenShots2\Person_Java.png
      pos = (0, -0.15)
      size = (1, 1.18)
      startVal [time (s)] = 0.0
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    ButtonComponent next_16
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.7, 0)
      save = first click
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Back to Beginning
      timeRelativeTo = routine
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    ButtonComponent next_phase_16
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.7, 0.3)
      size = (0.35, 0.1)
      startVal [time (s)] = 0
      text = Next Phase
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    TextComponent Clock_10
      letterHeight = 0.05
      pos = (-0.7, 0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $"%d" % timer.getTime()
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    TextComponent info_10
      letterHeight = 0.05
      pos = (-0.7, 0.4)
      startVal [time (s)] = 0.0
      text = Remaining Time:
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    TextComponent comments_5
      letterHeight = 0.05
      pos = (-0.7, 0.1)
      startVal [time (s)] = 0.0
      text = Comments:
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    TextboxComponent comment_box_5
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.03
      padding = None
      pos = (-0.7, -0.2)
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $comment5
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  Routine Informed_Consent_1
    TextboxComponent Informed_box_1
      autoLog = False
      bold = False
      editable = False
      fillColor = darkgray
      letterHeight = 0.03
      saveStartStop = False
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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      text:
        1. What is this experiment about?

        You are invited to take part in a study concerning the
        understanding of concurrent programming. You will be asked
        to read and comment some concurrent Java code first, and
        then answer some questions concerning some features in this
        code. You will not be asked questions that identify who you
        are.

        Press Spacebar to Continue.
    KeyboardComponent key_resp_41
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Informed_Consent_2
    TextboxComponent Informed_box_2
      autoLog = False
      bold = False
      editable = False
      fillColor = darkgray
      letterHeight = 0.03
      saveStartStop = False
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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      text:
        2. Who is doing it?

        The study is being conducted by Zhangliang Ma, MCS
        Candidate, under the supervision of Eric Aubanel, Professor in
        the Faculty of Computer Science, at the University of New
        Brunswick.

        Press Spacebar to Continue.
    KeyboardComponent key_resp_42
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Informed_Consent_3
    TextboxComponent Informed_box_3
      autoLog = False
      bold = False
      editable = False
      fillColor = darkgray
      letterHeight = 0.03
      saveStartStop = False
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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      text:
        3. What will I have to do?

        If you choose to participate, you will read a piece of
        concurrent code consisting of multiple Java classes.
        During the reading, we expect you to make some comments.

        After reading the code, we will provide you a questionnaire
        concerning the features of the code.

        At the end, you will answer some questions about your age,
        education level, self-assessment, and years of experience in
        java concurrent programming.

        The duration of this study is 30 min or less. It is required that
        you finish the experiment in one sitting.

        Press Spacebar to Continue.
    KeyboardComponent key_resp_43
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Informed_consent_4
    TextboxComponent Informed_box_4
      autoLog = False
      bold = False
      editable = False
      fillColor = darkgray
      letterHeight = 0.03
      saveStartStop = False
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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      text:
        4. What will I get for participating?

        In this experiment, we offer you a choice that you can enter
        your email address so we can gift you a 10 CAD e-gift card.
        However, the availability of the gift cards is dependent on
        the different regions of the world.

        In addition, we will not disclose your email address, or use
        it for any other purposes.

        Press Spacebar to Continue.
    KeyboardComponent key_resp_44
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Informed_Consent_5
    TextboxComponent Informed_box_5
      autoLog = False
      bold = False
      editable = False
      fillColor = darkgray
      letterHeight = 0.03
      saveStartStop = False
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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      text:
        5. Why should I participate?

        By participating in this experiment, you can give us
        important information that will help us understand the
        mental models of concurrent programming.

        Press Spacebar to Continue.
    KeyboardComponent key_resp_45
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Informed_Consent_6
    TextboxComponent Informed_box_6
      autoLog = False
      bold = False
      editable = False
      fillColor = darkgray
      letterHeight = 0.03
      saveStartStop = False
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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      text:
        6. How is this safe for me to do? How do you keep my
        answers private and confidential?

        The demographic questions, experiment, and the data
        are stored on pavlovia.org, which is a secured domain
        protected by the HTTPs protocol. This means only the
        designer who owns this experiment can have access to
        the data.

        The data will be summarized and processed in reports,
        without the disclosure of the original data. You can always
        stay anonymous during the whole sitting of the experiment.

        Press Spacebar to Continue.
    KeyboardComponent key_resp_46
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Informed_Consent_7
    TextboxComponent Informed_box_7
      autoLog = False
      bold = False
      editable = False
      fillColor = darkgray
      letterHeight = 0.03
      saveStartStop = False
      size = (1, 0.7)
      startVal [time (s)] = 0
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      text:
        7. What are my rights as a participant in this survey?

        Participation in this study is completely voluntary. If at
        any moment you feel you do not want to continue for
        any reason, you are free to leave without penalty.

        The researchers can only use your data after you click
        finish at the end of the survey. The result of the concurrent
        programming questions will not be scored.

        Press Spacebar to Continue.
    KeyboardComponent key_resp_47
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Informed_consent_8
    TextboxComponent Informed_box_8
      autoLog = False
      bold = False
      editable = False
      fillColor = darkgray
      letterHeight = 0.03
      saveStartStop = False
      size = (1, 0.7)
      startVal [time (s)] = 0
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      text:
        8. Why might I not want to do it?

        Some of the questions may make you feel disappointed if
        you are not comfortable with concurrent programming.
        We do not expect that you will feel negative during
        the study. If you are worried about this during the experiment,
        feel free to leave by pressing the ESC.

        This project is on file with the Research Ethics Board,
        University of New Brunswick. If you have any questions or
        concern about your rights or treatment regarding this
        experiment, you may contact this email address:
        zma7@unb.ca

        Press Spacebar to Continue.
    KeyboardComponent key_resp_48
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Informed_Question_1
    TextboxComponent Informed_Q1
      autoLog = False
      bold = False
      editable = False
      fillColor = darkgray
      letterHeight = 0.03
      saveStartStop = False
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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      text:
        I confirm that I am over 19 years old.

        (Press Y if you agree, ESC to quit the experiment)
    KeyboardComponent Informed_key1
      allowedKeys = 'y'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Informed_Question_2
    TextboxComponent Informed_Q2
      autoLog = False
      bold = False
      editable = False
      fillColor = darkgray
      letterHeight = 0.03
      saveStartStop = False
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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      text:
        I have read and understood the information and
        consent to participate in this experiment.

        (Press Y if you agree, ESC to quit the experiment)
    KeyboardComponent Informed_key2
      allowedKeys = 'y'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Informed_Question_3
    TextboxComponent Informed_Q3
      autoLog = False
      bold = False
      editable = False
      fillColor = darkgray
      letterHeight = 0.03
      saveStartStop = False
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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      text:
        I consent to the use of my email address to obtain a gift card,
        if I so choose

        (Press Y if you agree, ESC to quit the experiment)
    KeyboardComponent Informed_Key3
      allowedKeys = 'y'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Demo_intro
    TextComponent Demo_Introduction
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thanks for your participation! We will collect some information about
        yourself and the possible ways to give you the gift card!

        Press SpaceBar to continue
    KeyboardComponent key_resp_52
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Comprehension_Recall
    CodeComponent clock_init
      Code Type = Py
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      End Routine:
        timer = core.CountdownTimer(30)
    KeyboardComponent key_resp_50
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_14
      bold = False
      editable = False
      fillColor = darkgrey
      letterHeight = 0.03
      size = (1, 0.95)
      startVal [time (s)] = 0.0
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      text:
        In this section, we welcome you to look at a piece of
        code with concurrency written in java. This code piece is
        designed for teaching java concurrency.

        ============================================

        The time for this task is 15 min, and the remaining time will
        be displayed at the upper left corner. After this task, we will
        ask some questions about the code features.

        During this phase, you can scroll the code pieces to see
        the rest of the code.

        A textbox is provided and your task is to describe how this
        program runs with your own language.

        If you finish the task before the
        limited time, feel free to click the "next phase" button to end
        early.

        Press SpaceBar to begin.
  Routine Comprehension_Do
    CodeComponent clock_init_2
      Code Type = Py
      End Routine:
        timer = core.CountdownTimer(30)
    KeyboardComponent key_resp_51
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_15
      bold = False
      editable = False
      fillColor = darkgray
      letterHeight = 0.03
      size = (1, 0.95)
      startVal [time (s)] = 0.0
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      text:
        In this section, we welcome you to look at a piece of
        code with concurrency written in java. This code piece is
        designed for teaching java concurrency.

        ============================================

        The time for this task is 15 mins and the remaining time will
        be displayed at the upper left corner. After this task, we will
        ask some questions about the code features.


        During this phase, you can scroll the code pieces to see
        the rest of the code.

        Your task is to describe if there exist any concurrent bug in
        the code in the given textbox. Type N/A if there is no such bug.

        If you finish the task before the
        limited time, feel free to click the "next phase" button to end
        early.

        Press SpaceBar to begin.
  Routine Demo_Q12
    TextComponent text_44
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Email address for the gift card (optional): 
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    TextboxComponent textbox
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.05
      size = (1, 0.15)
      startVal [time (s)] = 0.0
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    ButtonComponent button_5
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.7, 0)
      save = first click
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Next
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  Routine Demo_Q1
    TextComponent text_45
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Age (in number of years):
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    TextboxComponent textbox_2
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.05
      size = (1, 0.15)
      startVal [time (s)] = 0.0
      text = Please type here: 
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    ButtonComponent button_6
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.7, 0.0)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Next
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  Routine Demo_Q4
    TextComponent text_48
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Number of CONCURRENT programming courses finished: 
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    TextboxComponent textbox_5
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.05
      size = (1, 0.15)
      startVal [time (s)] = 0.0
      text = Please type here: 
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    ButtonComponent button_9
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.7, 0)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Next
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  Routine Demo_Q5
    TextComponent text_49
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Highest level of education achieved: 
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    TextboxComponent textbox_6
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.05
      size = (1, 0.15)
      startVal [time (s)] = 0.0
      text = Please type here: 
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    ButtonComponent button_10
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.7, 0)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Next
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  Routine Demo_Q2
    TextComponent text_46
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Are you currently a student (Yes or No)
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    TextboxComponent textbox_3
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.05
      size = (1, 0.15)
      startVal [time (s)] = 0.0
      text = Please type here: 
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    ButtonComponent button_7
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.7, 0)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Next
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  Routine Demo_Q3
    TextComponent text_47
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Number of programming courses finished: 
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    TextboxComponent textbox_4
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.05
      size = (1, 0.15)
      startVal [time (s)] = 0.0
      text = Please type here: 
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    ButtonComponent button_8
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.7, 0)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Next
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  Routine Demo_Q6
    TextComponent text_5
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Number of years since you first come to know Java:
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    TextboxComponent textbox_7
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.05
      size = (1, 0.15)
      startVal [time (s)] = 0.0
      text = Please type here:
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    ButtonComponent button_12
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.7, 0)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Next
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  Routine Demo_Q7
    TextComponent text_51
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Number of years of programming experience in Java:
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    TextboxComponent textbox_8
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.05
      size = (1, 0.15)
      startVal [time (s)] = 0.0
      text = Please type here:
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    ButtonComponent button_13
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.7, 0)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Next
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  Routine Demo_Q8
    TextComponent text_52
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Number of years of experience in concurrent programming:
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    TextboxComponent textbox_9
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.05
      size = (1, 0.15)
      startVal [time (s)] = 0.0
      text = Please type here:
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    ButtonComponent button_14
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.7, 0)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Next
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  Routine Demo_Q9
    TextComponent text_53
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Number of years of experience using java.util.concurrent package: 
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    TextboxComponent textbox_10
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.05
      size = (1, 0.15)
      startVal [time (s)] = 0.0
      text = Please type here: 
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    ButtonComponent button_15
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.7, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Next
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  Routine Demo_Q10
    TextComponent text_54
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        Rate your level of expertise in Java concurrency, between 0 and 100
        (0 = total lack of knowledge; 100 = total expert)
    TextboxComponent textbox_11
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.05
      size = (1, 0.15)
      startVal [time (s)] = 0.0
      text = Please type here:
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    ButtonComponent button_16
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.7, 0)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Next
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  Routine Demo_Q11
    TextComponent text_55
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        Rate your level of expertise in Java concurrency AMONG PEERS,
        between 0 and 100
        (0 = total lack of knowledge; 100 = total expert)
    TextboxComponent textbox_12
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.05
      size = (1, 0.15)
      startVal [time (s)] = 0.0
      text = Please type here:
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    ButtonComponent button_17
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.7, 0)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Next
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  Routine Book_Recall
    MouseComponent mouse_6
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Py
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      Begin Routine:
        recall_box.text = comment1
      Each Frame:
        newY = mouse_6.getWheelRel()[1] / 40
        img6.pos -= (0, newY)

        Clock_6.setText("%d" % timer.getTime(), log=False)

        if timer.getTime() <= 0:
            repeat.finished = True
            Comp_Recall.finished = True
            continueRoutine = False
      End Routine:
        comment1 = recall_box.getText()
    ImageComponent img6
      image = Business_code_img_croped.png
      pos = (0.3, -0.8)
      size = (1.0, 2.536)
      startVal [time (s)] = 0.0
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    ButtonComponent next_phase_12
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.7, 0.25)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Next Phase
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      callback:
        ContinueRoutine = False
        API_rep = 0
    TextComponent Clock_6
      letterHeight = 0.05
      pos = (-0.7, 0.35)
      startVal [time (s)] = 0.0
      text [set every frame] = $"%d" % timer.getTime()
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    TextComponent info_6
      letterHeight = 0.03
      pos = (-0.7, 0.4)
      startVal [time (s)] = 0.0
      text = Remaining Time:
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    TextComponent C_1
      letterHeight = 0.03
      pos = (-0.65, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Describe the program below:
        (with your own language)
    TextboxComponent recall_box
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.03
      padding = None
      pos = (-0.55, -0.22)
      size = (0.6, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $comment1
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  Routine Book_Do
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent image_control
      Code Type = Py
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      Begin Routine:
        do_box.text = comment2
      Each Frame:
        newY = mouse.getWheelRel()[1] / 40
        image.pos -= (0, newY)

        Clock_1.setText("%d" % timer.getTime(), log=False)

        if timer.getTime() <= 0:
            repeat2.finished = True
            Comp_Do.finished = True
            continueRoutine = False
      End Routine:
        comment2 = do_box.getText()
    ImageComponent image
      image = Business_code_img_croped.png
      pos = (0.3, -0.8)
      size = (1.0, 2.536)
      startVal [time (s)] = 0.0
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    ButtonComponent next_phase_0
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.7, 0.25)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Next Phase
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      callback:
        ContinueRoutine = False
        API_rep = 0
    TextComponent Clock_1
      letterHeight = 0.05
      pos = (-0.7, 0.35)
      startVal [time (s)] = 0.0
      text [set every frame] = $"%d" % timer.getTime()
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    TextComponent Info1
      letterHeight = 0.03
      pos = (-0.7, 0.4)
      startVal [time (s)] = 0.0
      text = Remaining Time:
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    TextComponent C_2
      letterHeight = 0.03
      pos = (-0.7, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Please describe
        concurrency bugs
        below (N/A if none):
    TextboxComponent do_box
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.03
      pos = (-0.55, -0.22)
      size = (0.6,0.5)
      startVal [time (s)] = 0.0
      text = $comment2
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  Routine RTD_Bugs
    TextComponent text_34
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        Have you found any concurrency bug in the provided code?
        Please describe the bugs if you find it, or N/A if you find not.
    TextboxComponent textbox_16
      bold = False
      editable = True
      fillColor = darkgray
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (1, 0.7)
      startVal [time (s)] = 0.0
      text = Please type here:
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    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.7, 0.25)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Next
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  Routine Concurrent_API
    MouseComponent mouse_11
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Py
      Each Frame:
        newY = mouse_11.getWheelRel()[1] / 40
        API_image.pos -= (0, newY)
    ImageComponent API_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine API
    MouseComponent mouse_2
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Each Frame:
        newY = mouse.getWheelRel()[1] / 40
        img2.pos -= (0, newY)

        Clock_2.setText("%d" % timer.getTime(), log=False)

        if timer.getTime() <= 0:
            repeat.finished = True
            Comp_Recall.finished = True
            continueRoutine = False
    ImageComponent img2
      image = CHM_API.png
      pos = (0, -1.25)
      size = (1, 3.28)
      startVal [time (s)] = 0.0
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    ButtonComponent button_3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.75, 0)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = To Code
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    TextComponent Clock_2
      letterHeight = 0.05
      pos = (-0.7, 0.35)
      startVal [time (s)] = 0.0
      text [set every frame] = $"%d" % timer.getTime()
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    TextComponent info_2
      letterHeight = 0.03
      pos = (-0.7, 0.4)
      startVal [time (s)] = 0.0
      text = Remaining Time:
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  Routine Q31
    TextComponent text_56
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If two threads concurrently execute the "Library::borrowBook()" method, is it possible that one thread returns "true" and the other thread returns "false"?

        (Y/N)
    KeyboardComponent key_resp_53
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Feedback
    TextComponent text_57
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        This study is in its pilot phase and your feedback really helps!
        Please help us, and write your feedback in the textbox below:
    TextboxComponent textbox_13
      bold = False
      editable = True
      fillColor = darkgrey
      letterHeight = 0.03
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
      text = Please type here
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    ButtonComponent button_11
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.7, 0)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Next
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Flow
  Routine Welcome
  Routine Informed_Consent_1
  Routine Informed_Consent_2
  Routine Informed_Consent_3
  Routine Informed_consent_4
  Routine Informed_Consent_5
  Routine Informed_Consent_6
  Routine Informed_Consent_7
  Routine Informed_consent_8
  Routine Informed_Question_1
  Routine Informed_Question_2
  Routine Informed_Question_3
  LoopInitiator Comp_recall_branch loopType="TrialHandler"
    loopType = sequential
    nReps = RTR
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    Routine Comprehension_Recall
  LoopTerminator Comp_recall_branch
  LoopInitiator Comp_Do_Branch loopType="TrialHandler"
    loopType = sequential
    nReps = RTD
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    Routine Comprehension_Do
  LoopTerminator Comp_Do_Branch
  LoopInitiator repeat loopType="TrialHandler"
    loopType = random
    nReps = RTR
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    Routine Book_Recall
  LoopTerminator repeat
  LoopInitiator repeat2 loopType="TrialHandler"
    loopType = random
    nReps = RTD
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    Routine Book_Do
  LoopTerminator repeat2
  Routine Questionnaire_phase_introduction
  Routine Q1
  Routine Q2
  Routine Q3
  Routine Q4
  Routine Q5
  Routine Q6
  Routine Q7
  Routine Q8
  Routine Q9
  Routine Q10
  Routine Q11
  Routine Q12
  Routine Q13
  Routine Q14
  Routine Q15
  Routine Q16
  Routine Demo_intro
  Routine Demo_Q1
  Routine Demo_Q2
  Routine Demo_Q3
  Routine Demo_Q4
  Routine Demo_Q5
  Routine Demo_Q6
  Routine Demo_Q7
  Routine Demo_Q8
  Routine Demo_Q10
  Routine Demo_Q11
  Routine Demo_Q12
  Routine Feedback
  Routine Thanks
